PsychoPy2experiment version="1.83.01"
Settings
  Data filename = u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = ProgressBar1
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    CodeComponent code
      Begin Experiment:
        import random
        import itertools
        import numexpr
        class eqGenTools(object):
            def __init__(self, diff, intQty=0, ops=0):
                self.intQty = intQty #this refers to how many integers you want to create
                self.ops = ops
            def intTool(self, intQty, diff): #creates a dictionary and fills it with integ values
                self.intDic=[]
                if diff == "med2":
                    integers = [9,9,99,99]
                    random.shuffle(integers)
                    self.ops = ('*', '-', '*')
                elif diff == "med1":
                    integers = [9,9,9,9]
                    self.ops = ('+', '-', '*')
                elif diff =="easy1":
                    integers = [9,9]
                    self.ops = ('+','-')
                elif diff == "easy2":
                     integers = [9,9,9]
                     self.ops = ('+', '-')
                elif diff == "hard":
                    integers = [99,99,99,99]
                    self.ops = ('+','-','/','*')
                self.intQty = len(integers)

                for i, val in enumerate(integers):
                        num = range(1,integers[i])
                        temp = float(random.choice(num))
                        self.intDic.append(temp)


            def optGenTool(self, ops):
                self.opDic=[]
                temp = 0
                for i in range(0,(self.intQty-1)):
                     temp = str(random.choice(self.ops))
                     self.opDic.append(temp)

            def eqGenerator(self, dictlist, optlist):

                while True:
                    self.intTool(self.intQty, self.diff)
                    self.equation = [x for x in itertools.chain.from_iterable(itertools.izip_longest(self.intDic,self.opDic, fillvalue=''))]
                    self.equation = ' '.join(str(e) for e in self.equation)

                    if ("/0" not in self.equation):
                        break
                self.ans = eval(self.equation)

        class MISTEasy1(eqGenTools):
            def __init__(self, ans=0, equation=0, diff="med", intQty=0, opQty=0, ops=0, dictlist=[], optlist=[]):
                eqGenTools.__init__(self, diff, intQty, opQty)
                self.equation = equation
                self.ans = ans
                self.diff = diff
                self.intQty = intQty
                self.ops = ops

            def EasyOps1(self):
                while True:
                    self.intTool(self.intQty, self.diff)
                    self.optGenTool(self.ops)
                    self.eqGenerator(self.intDic, self.opDic)
                    if ((float(self.ans).is_integer()) and (self.ans>=0) and (self.ans <=9)):
                        self.equation = self.equation.replace('.0','')
                        self.ans = str(self.ans).replace('.0','')
                        break
        usrAvg = 0
        msg = ""
        eq = ""
        corCount = 0
        inCorCount = 0
        meanRT = []
        time = 10
        totalCor = 0
        difficulty = "easy1"
      Begin Routine:
        msg = ""
        timeout = 0
        timer = core.Clock()
        x = MISTEasy1( diff = difficulty)
        x.EasyOps1()
        eq = "%s = ?" %(x.equation)
      End Routine:
        if ppRating.getRating() == x.ans:
            msg = "Correct"
            corCount = corCount + 1
            totalCor=totalCor+1
            usrAvg = usrAvg + 0.05
        elif (ppRating.getRating() != x.ans) and (timeout == 0):
            msg = "Incorrect"
            if corCount <= 0:
                corCount = corCount -1
                usrAvg= usrAvg+0.1
            else:
                corCount = 0
                usrAvg = usrAvg+0.02

        print(ppRating.getRT())
        print(ppRating.getRating())
        print (x.ans)
        if ppRating.getRT() == None:
            RT = time
        else:
            RT = ppRating.getRT()

        meanRT.append(RT)
        time = np.mean(meanRT)

        if corCount == 3:
            time = (time* 0.9)
            corCount = 0

        if corCount == -3:
            time = (time*1.1)
            corCount = 0

        if totalCor < 5:
            difficulty = "easy1"
        elif totalCor == 5:
            difficulty = "easy2"
        elif totalCor == 5:
            difficulty = "med1"
        elif totalCor == 10:
            difficulty = "med2"
        elif totalCor == 20:
            difficulty = "hard"

        print(corCount)
        print(time)

        if usrAvg >= 1.8:
            usrAvg = 1.8
      Each Frame:
        if timer.getTime()> time:
            msg = "TIMEOUT!"
            timeout = 1
            corCount = corCount-1
            continueRoutine = False
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    PolygonComponent timeBarBlank
      fillColor = $[1,1,1]
      stopVal [duration (s)] = 10
      startVal [time (s)] = 0.0
      size = [2, 0.05]
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    PolygonComponent timeBarFill
      fillColor = $[1,0,0]
      stopVal [duration (s)] = 10
      pos = [-1, 0]
      startVal [time (s)] = 0.0
      size [set every frame] = [(timer.getTime()/time)*4, 0.05] 
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    TextComponent timeRemaining
      text = Time Remaining
      stopVal [duration (s)] = 10
      pos = [0, 0.1]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    PolygonComponent feedBackBarBelow
      fillColor = $[1,0,0]
      stopVal [duration (s)] = 10
      pos = [-0.5, 0.6]
      startVal [time (s)] = 0.0
      size = [1, 0.05]
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    PolygonComponent feedbackBarAverage
      fillColor = $[1,1,0]
      stopVal [duration (s)] = 10
      pos = [0.2, 0.6]
      startVal [time (s)] = 0.0
      size = [1, 0.05]
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    PolygonComponent feedbackBarAbove
      fillColor = $[0,1,0]
      stopVal [duration (s)] = 10
      pos = [0.8, 0.6]
      startVal [time (s)] = 0.0
      size = [0.5, 0.05]
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    PolygonComponent averagePointer
      fillColor = $[1,0,0]
      stopVal [duration (s)] = 10
      pos = [0.4, 0.65]
      ori = 180
      startVal [time (s)] = 0.0
      nVertices = 3
      size = [0.05, 0.05]
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    PolygonComponent userPointer
      fillColor = $[0,1,0]
      stopVal [duration (s)] = 10
      pos [set every repeat] = [(1-usrAvg), 0.55]
      startVal [time (s)] = 0.0
      nVertices = 3
      size = [0.05, 0.05]
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    RatingScaleComponent ppRating
      pos = 0.5, -0.4
      high = 9
      startVal [time (s)] = 0.0
      size = 0.9
      forceEndRoutine = True
      low = 0
      stopVal [duration (s)] = 10
      categoryChoices = 0,1,2,3,4,5,6,7,8,9
      singleClick = True
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    TextComponent equationDisplay
      wrapWidth = 2
      text [set every repeat] = $eq
      stopVal [duration (s)] = 10
      pos = [0, 0.3]
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    TextComponent yourPerformance
      stopVal [duration (s)] = 10
      pos [set every repeat] = [(1-usrAvg), 0.48]
      startVal [time (s)] = 0.0
      letterHeight = 0.03
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      text:
            Your
        Performance
    TextComponent peerPerformance
      stopVal [duration (s)] = 10
      pos = [0.0, 0.7]
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text:
        Percentage from Peer Performance
        Please remain in the green area
  Routine feeback
    TextComponent pFeedback
      text [set every repeat] = $msg
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine Instructions
    TextComponent text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Please answer the following artimetic questions to the best of your ability.

        You will be measured on reaction time and accuracy

        To ensure we get the best results, we need you to be performing at the level of your peers (indicated by the red arrow)

        Good luck!

        Press space to start
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 1000
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    Routine trial
    Routine feeback
  LoopTerminator trials
